PsychoPy2experiment version="2021.1.0"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1366, 768]
  expName = PruebaGabor1
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Routines
  Routine trial
    GratingComponent grating
      mask = circle
      ori [set every repeat] = $Orientation
      phase = 0
      sf [set every repeat] = $FrecEspacial
      size = (200, 200)
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 3.0
      tex = sin
      units = pix
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    KeyboardComponent key_resp
      allowedKeys = 'left','right'
      correctAns = $CorrectAns
      forceEndRoutine = False
      startVal [time (s)] = 3.2
      stopVal [duration (s)] = 3
      storeCorrect = True
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    TextComponent CorrecoIncorrec
      letterHeight = 0.1
      startVal [time (s)] = 3.2
      stopVal [duration (s)] = 3
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      text:
        ¿Incorrecto o Correcto?
    TextComponent feedback
      letterHeight = 0.1
      startVal [time (s)] = 6.3
      stopVal [duration (s)] = 2
      text [set every repeat] = $Respuesta
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  Routine Intrucciones
    TextComponent InstruccionesGabor
      letterHeight = 0.1
      startVal [time (s)] = 0.5
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      text:
        Bienvenidos
        Descripcion de la tarea
    KeyboardComponent respinstrucciones
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine End
    TextComponent Gracias
      letterHeight = 0.1
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 3
      text = ¡Muchas gracias por participar!
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Flow
  Routine Intrucciones
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Gaborparametros.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'FrecEspacial': 1.99, 'Orientation': 0.0, 'Fase': 0.0, 'Respuesta': 1.0, 'CorrectAns': 'right'},
      {'FrecEspacial': 1.9, 'Orientation': 45.0, 'Fase': 0.0, 'Respuesta': 1.0, 'CorrectAns': 'right'},
      {'FrecEspacial': 1.91, 'Orientation': 90.0, 'Fase': 0.0, 'Respuesta': 0.0, 'CorrectAns': 'left'},
      {'FrecEspacial': 1.92, 'Orientation': 135.0, 'Fase': 0.0, 'Respuesta': 0.0, 'CorrectAns': 'left'},
      {'FrecEspacial': 1.93, 'Orientation': 0.0, 'Fase': 0.0, 'Respuesta': 1.0, 'CorrectAns': 'right'},
      {'FrecEspacial': 1.94, 'Orientation': 25.0, 'Fase': 0.0, 'Respuesta': 1.0, 'CorrectAns': 'right'},
      {'FrecEspacial': 1.95, 'Orientation': 15.0, 'Fase': 0.0, 'Respuesta': 1.0, 'CorrectAns': 'right'},
      {'FrecEspacial': 1.96, 'Orientation': 0.0, 'Fase': 0.0, 'Respuesta': 1.0, 'CorrectAns': 'right'},
      {'FrecEspacial': 1.97, 'Orientation': 100.0, 'Fase': 0.0, 'Respuesta': 0.0, 'CorrectAns': 'left'},
      {'FrecEspacial': 1.8, 'Orientation': 120.0, 'Fase': 0.0, 'Respuesta': 0.0, 'CorrectAns': 'left'}]
    Routine trial
  LoopTerminator trials
  Routine End
