PsychoPy2experiment version="2020.2.10"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1366, 768]
  expName = PruebaGabor1
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Routines
  Routine trial
    GratingComponent grating
      mask = circle
      phase [set every repeat] = $Fase
      sf [set every repeat] = $FrecEspacial
      size = (200, 200)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.0
      tex = sin
      units = pix
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  Routine Intrucciones
    TextComponent InstruccionesGabor
      letterHeight = 0.1
      startVal [time (s)] = 0.5
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      text:
        Bienvenidos
        Descripcion de la tarea
    KeyboardComponent respinstrucciones
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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Flow
  Routine Intrucciones
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Gaborparametros.xlsx
    loopType = random
    nReps = 10
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    conditions:
      [OrderedDict([('Position', -150), ('Orientation', 0)]),
      OrderedDict([('Position', -50), ('Orientation', 45)]),
      OrderedDict([('Position', 0), ('Orientation', 90)]),
      OrderedDict([('Position', 50), ('Orientation', 135)]),
      OrderedDict([('Position', 150), ('Orientation', 35)]),
      OrderedDict([('Position', 110), ('Orientation', 25)]),
      OrderedDict([('Position', -110), ('Orientation', 15)]),
      OrderedDict([('Position', -100), ('Orientation', 120)]),
      OrderedDict([('Position', 100), ('Orientation', 100)]),
      OrderedDict([('Position', 130), ('Orientation', 110)])]
    Routine trial
  LoopTerminator trials
