PsychoPy2experiment version="2021.1.0"
Settings
  Data filename = u'data/%s_%s_%s' %(expInfo['Name'], expName, expInfo['date'])
  Experiment info = {'Name': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = pix
  Window size (pixels) = [1366, 768]
  color = $[1,1,1]
  expName = circles
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Routines
  Routine End
    ImageComponent image_4
      image = images/Finish.png
      size = [1024, 768]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      units = pix
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  Routine slider
    RatingScaleComponent rating
      customize_everything = labels=('nada seguro', 'muy seguro'), markerColor='White', lineColor=[-1,-1,-1], textColor=[-1,-1,-1], scale=None, singleClick=True, precision=100, showAccept=False, mouseOnly=True, low=0, high=1
      forceEndRoutine = True
      high = 1
      labels = nada seguro, muy seguro
      low = 0
      marker = circle
      pos = 0, -0.4
      showAccept = False
      size = 1.0
      startVal [condition] = 'slider' in trial_type
      visualAnalogScale = True
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    CodeComponent code_2
      Code Type = Auto->JS
      Each Frame:
        if 'slider' not in trial_type:
            continueRoutine = False
      End Routine:
        if 'slider' in trial_types[trials.thisTrialN]:
            trials.addOtherData('Confidence', rating.getRating())
            trials.addOtherData('Confidence RT', rating.getRT())
        else:
            trials.addOtherData('Confidence', np.nan)
            trials.addOtherData('Confidence RT', np.nan)
    ImageComponent image_2
      image = images/slider2.png
      pos = (0, -0.4)
      size = (0.61, 0.1)
      startVal [time (s)] = 0.0
      units = norm
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  Routine pass_level
    CodeComponent code_4
      Code Type = Auto->JS
      Each Frame:
        if score < points_to_pass_level:
            continueRoutine = False
      End Routine:
        if score >= points_to_pass_level:
            score = score % points_to_pass_level
        for i, wcircle in enumerate(wager_circles):
            if i<score:
                wcircle.fillColor = [1, -1, -1]
            else:
                wcircle.fillColor = [0, 0, 0]
        win.flip()
    ImageComponent image
      image = images/congrats.jpg
      size = [1024, 768]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      units = pix
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  Routine test_trial
    ImageComponent Bienvenidos_prueba
      image = images/Bienvenidos-prueba.png
      size = [1024, 768]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      units = pix
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  Routine trialpresentation
    CodeComponent code_5
      Code Type = Auto->JS
      Begin Experiment:
        #points_to_pass_level sets the number of point that you have to do in order to advance one level.
        #If this experiment will be run with children we recomend to use 10, but if it will be run with adults you can use a big level equal to the size of trial_types times 3.
        points_to_pass_level = 10

        treatment = 'Control'
    PolygonComponent circlep0
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      nVertices = 100
      pos = [-120, 120]
      shape = regular polygon...
      size = (8, 8)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 10
      units = pix
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    PolygonComponent circlep1
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      nVertices = 100
      pos = [0, 120]
      shape = regular polygon...
      size = (8, 8)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 10
      units = pix
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    PolygonComponent circlep2
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      nVertices = 100
      pos = (120, 120)
      shape = regular polygon...
      size = (8, 8)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 10
      units = pix
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    PolygonComponent circlep3
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      nVertices = 100
      pos = (-100, 0)
      shape = regular polygon...
      size = (8, 8)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 10
      units = pix
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    PolygonComponent circlep4
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      nVertices = 100
      shape = regular polygon...
      size = (8, 8)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 10
      units = pix
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    PolygonComponent circlep5
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      nVertices = 100
      pos = (100, 0)
      shape = regular polygon...
      size = (8, 8)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 10
      units = pix
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    PolygonComponent circlep6
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      nVertices = 100
      pos = (-120, -120)
      shape = regular polygon...
      size = (8, 8)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 10
      units = pix
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    PolygonComponent circlep7
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      nVertices = 100
      pos = (0, -120)
      shape = regular polygon...
      size = (8, 8)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 10
      units = pix
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    PolygonComponent circlep8
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      nVertices = 100
      pos = (120, -120)
      shape = regular polygon...
      size = (8, 8)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 10
      units = pix
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    CodeComponent code_6
      Code Type = Auto->JS
      Begin Experiment:
        #size pattern it sets the relative size of the cirlces.
        size_pattern = [96, 92, 88, 80, 75, 70, 60, 50]
        max_size = 100
        circle_distance = max_size*2.5#150
        min_dist = circle_distance - 2*max_size
        xoffset = -circle_distance
        yoffset = -float(win.size[1]) / 2 + max_size*1.5
        circle_positions = [(circle_distance * (i % 3) + xoffset, circle_distance * (i - i % 3) / 3 + yoffset) for i in range(9)]
        circle_units = 'pix'


        score = 0

        #wager_cirlces are the circles that shows you your current score.
        xoffset = -float(win.size[0])/2 + 100
        yoffset = -float(win.size[1])/2 + 100
        def wpoligon(i, points_to_pass_level=points_to_pass_level):
            if points_to_pass_level < 31:
                pos = [xoffset, 40 * i + yoffset]
            else:
                pos = [40 * (i % 6) + xoffset, 40 * (i - i % 6) / 6 + yoffset]
            return visual.Polygon(win, name='wcircle'+str(i), units='pix', edges=100,
                                  size=[30, 30], pos=pos, fillColor=[0,0,0], lineColor=[0,0,0])
        wager_circles = [wpoligon(i) for i in range(points_to_pass_level)]

        for wcircle in wager_circles:
            wcircle.setAutoDraw(True)

        #Set de number of routines per loop

        trialpresentation_types =['wagerpres','sliderpres', 'plainpres']*2
        trialpresentation_levels =[0.35, 0.35,0.5 ,0.8 , 0.8]
      Begin Routine:
        trialpresentation_type = trialpresentation_types[intro.thisN]

        circles = [circlep0, circlep1, circlep2, circlep3, circlep4, circlep5,
                   circlep6, circlep7, circlep8]
        scale = trialpresentation_levels[intro.thisN]
        sizes = [max_size] + [int(max(1, min(1.5*scale*size, max_size-1))) for size in size_pattern]
        np.random.shuffle(sizes)
        for i, (circle, size) in enumerate(zip(circles, sizes)):
            circle.size = [2 * size, 2 * size]
            circle.units = circle_units
            circle.pos = circle_positions[i]
            circle.pos[0] += randint(-min_dist / 2, min_dist / 2)
            circle.pos[1] += randint(-min_dist / 2, min_dist / 2)
            if size == max_size:
                target_circle = i
      Each Frame:
        if t > 0.5:
            for i, circle in enumerate(circles):
                if mouse.isPressedIn(circle):
                    response = i
                    continueRoutine = False
                    responsertpres=t
      End Routine:
        correctAns = target_circle == response
    MouseComponent mouse_2
      forceEndRoutineOnPress = any click
      saveMouseState = never
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 10
      timeRelativeTo = routine
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    StaticComponent ISI_2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine trial
    CodeComponent settings
      Code Type = Auto->JS
      Begin Experiment:
        #set the mix of tirlas that you want.
        wager = 18
        slider = 18
        plain = 6
        wagereasy = 2
        wagerhard = 2
        slidereasy = 2
        sliderhard = 2
        plaineasy = 2
        plainhard = 2

        #points_to_pass_level sets the number of point that you have to do in order to advance one level.
        #If this experiment will be run with children we recomend to use 10, but if it will be run with adults you can use a big level equal to the size of trial_types times 3.
        points_to_pass_level = 10

        treatment = 'Control'
    StaticComponent ISI
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    PolygonComponent circle0
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      nVertices = 100
      pos = [-120, 120]
      shape = regular polygon...
      size = [8, 8]
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 10
      units = pix
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    PolygonComponent circle1
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      nVertices = 100
      pos = [0, 120]
      shape = regular polygon...
      size = [8, 8]
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 10
      units = pix
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    PolygonComponent circle2
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      nVertices = 100
      pos = [120, 120]
      shape = regular polygon...
      size = [8, 8]
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 10
      units = pix
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    PolygonComponent circle3
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      nVertices = 100
      pos = [-100, 0]
      shape = regular polygon...
      size = [8, 8]
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 10
      units = pix
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    PolygonComponent circle4
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      nVertices = 100
      shape = regular polygon...
      size = [8, 8]
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 10
      units = pix
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    PolygonComponent circle5
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      nVertices = 100
      pos = [100, 0]
      shape = regular polygon...
      size = [8, 8]
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 10
      units = pix
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    PolygonComponent circle6
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      nVertices = 100
      pos = [-120, -120]
      shape = regular polygon...
      size = [8, 8]
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 10
      units = pix
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    PolygonComponent circle7
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      nVertices = 100
      pos = [0, -120]
      shape = regular polygon...
      size = [8, 8]
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 10
      units = pix
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    PolygonComponent circle8
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      nVertices = 100
      pos = [120, -120]
      shape = regular polygon...
      size = [8, 8]
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 10
      units = pix
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    CodeComponent code
      Code Type = Auto->JS
      Begin Experiment:
        #size pattern it sets the relative size of the cirlces.
        size_pattern = [96, 92, 88, 80, 75, 70, 60, 50]
        max_size = 100
        circle_distance = max_size*2.5#150
        min_dist = circle_distance - 2*max_size
        xoffset = -circle_distance
        yoffset = -float(win.size[1]) / 2 + max_size*1.5
        circle_positions = [(circle_distance * (i % 3) + xoffset, circle_distance * (i - i % 3) / 3 + yoffset) for i in range(9)]
        circle_units = 'pix'


        score = 0

        #wager_cirlces are the circles that shows you your current score.
        xoffset = -float(win.size[0])/2 + 100
        yoffset = -float(win.size[1])/2 + 100
        def wpoligon(i, points_to_pass_level=points_to_pass_level):
            if points_to_pass_level < 31:
                pos = [xoffset, 40 * i + yoffset]
            else:
                pos = [40 * (i % 6) + xoffset, 40 * (i - i % 6) / 6 + yoffset]
            return visual.Polygon(win, name='wcircle'+str(i), units='pix', edges=100,
                                  size=[30, 30], pos=pos, fillColor=[0,0,0], lineColor=[0,0,0])
        wager_circles = [wpoligon(i) for i in range(points_to_pass_level)]

        for wcircle in wager_circles:
            wcircle.setAutoDraw(True)


        trial_types = wager * ['wager'] + slider * ['slider'] + plain * ['plain']
        trial_types +=  wagereasy * ['wagereasy']
        trial_types +=  wagerhard * ['wagerhard']
        trial_types +=  slidereasy * ['slidereasy']
        trial_types +=  sliderhard * ['sliderhard']


        np.random.shuffle(trial_types)
      Begin Routine:
        trial_type = trial_types[trials.thisTrialN % len(trial_types)]

        circles = [circle0, circle1, circle2, circle3, circle4, circle5,
                   circle6, circle7, circle8]
        if 'easy' in trial_type:
            level = 0.9
        if 'hard' in trial_type:
            level = 0.1
        scale = 1 - level
        sizes = [max_size] + [int(max(1, min(1.5*scale*size, max_size-1))) for size in size_pattern]
        np.random.shuffle(sizes)
        for i, (circle, size) in enumerate(zip(circles, sizes)):
            circle.size = [2 * size, 2 * size]
            circle.units = circle_units
            circle.pos = circle_positions[i]
            circle.pos[0] += randint(-min_dist / 2, min_dist / 2)
            circle.pos[1] += randint(-min_dist / 2, min_dist / 2)
            if size == max_size:
                target_circle = i
        response = -1
      Each Frame:
        if t > 0.5:
            for i, circle in enumerate(circles):
                if mouse.isPressedIn(circle):
                    response = i
                    continueRoutine = False
                    responsert = t
      End Routine:
        correctAns = target_circle == response
        trials.addResponse(correctAns, level)
        trials.addOtherData('Response', correctAns)
        trials.addOtherData('Target', target_circle)
        for i, size in enumerate(sizes):
            trials.addOtherData('c'+str(i), size)
        trials.addOtherData('circle_response', response)
        trials.addOtherData('Scale', scale)
        trials.addOtherData('Intensity', level)
        trials.addOtherData('TrialType', trial_type)
        signal = np.log(sorted(sizes)[-1] / sorted(sizes)[-2])
        trials.addOtherData('Signal', signal)
        trials.addOtherData('Treatment', treatment)
        trials.addOtherData('cmax', sorted(sizes)[-1])
        trials.addOtherData('cmax2', sorted(sizes)[-2])
        trials.addOtherData('Trial', trials.thisTrialN)
        trials.addOtherData('Response RT', responsert)
    MouseComponent mouse
      forceEndRoutineOnPress = never
      saveMouseState = never
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 10
      timeRelativeTo = routine
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  Routine wagerpres
    MouseComponent mouse_3
      forceEndRoutineOnPress = any click
      saveMouseState = never
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 10
      timeRelativeTo = routine
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    CodeComponent code_8
      Code Type = Auto->JS
      Begin Routine:
        wagerpres = np.nan
        wagerpresrt = np.nan
      Each Frame:
        if 'wagerpres' not in trialpresentation_types[intro.thisN]:
            continueRoutine = False
        if t > 0.5:
            if mouse_3.isPressedIn(bet_button):
                wagerpres = 1
                continueRoutine = False
                wagerpresrt = t
            if mouse_3.isPressedIn(sure_button):
                wagerpres = 0
                continueRoutine = False
                wagerpresrt = t
      End Routine:
        if 'wagerpres' in trialpresentation_types[intro.thisN]:
            if wagerpres==1 and correctAns:
                score += 3
            elif wagerpres==1 and not correctAns:
                score -= 3
                score = max(0, score)
            elif not wagerpres==1:
                score += 1


        for i, wcircle in enumerate(wager_circles):
            if i<score:
                wcircle.fillColor = [1, -1, -1]
            else:
                wcircle.fillColor = [0, 0, 0]
        win.flip()
        #core.wait(3)
        #for i, wcircle in enumerate(wager_circles):
        #    wcircle.setAutoDraw(False)
    ImageComponent betbutton
      image = images/green-tick.png
      pos = [-75, -float(win.size[1])/2+100]
      size = (120, 150)
      startVal [time (s)] = 0.5
      units = pix
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    ImageComponent surebutton
      image = images/red-cross.png
      pos = [75,  -float(win.size[1])/2+100]
      size = (120, 150)
      startVal [time (s)] = 0.5
      units = pix
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  Routine wager
    MouseComponent mouse_wager
      forceEndRoutineOnPress = never
      saveMouseState = never
      startVal [time (s)] = 0.5
      timeRelativeTo = routine
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    CodeComponent code_3
      Code Type = Auto->JS
      Begin Routine:
        wager = np.nan
        wagerrt = np.nan
      Each Frame:
        if 'wager' not in trial_type:
            continueRoutine = False
        if t > 0.5:
            if mouse_wager.isPressedIn(bet_button):
                wager = 1
                continueRoutine = False
                wagerrt = t
            if mouse_wager.isPressedIn(sure_button):
                wager = 0
                continueRoutine = False
                wagerrt = t

        #for wcircle in wager_circles:
        #    if t >= 0.5 and wcircle.status == NOT_STARTED:
        #        # keep track of start time/frame for later
        #        wcircle.tStart = t  # underestimates by a little under one frame
        #        wcircle.frameNStart = frameN  # exact frame index
        #        wcircle.setAutoDraw(True)
      End Routine:
        trials.addOtherData('Wager', wager)
        trials.addOtherData('Wager RT', wagerrt)
        if 'wager' in trial_types[trials.thisTrialN]:
            if wager==1 and correctAns:
                score += 3
            elif wager==1 and not correctAns:
                score -= 3
                score = max(0, score)
            elif not wager==1:
                score += 1
        trials.addOtherData('Score', score)

        for i, wcircle in enumerate(wager_circles):
            if i<score:
                wcircle.fillColor = [1, -1, -1]
            else:
                wcircle.fillColor = [0, 0, 0]
        win.flip()
        #core.wait(3)
        #for i, wcircle in enumerate(wager_circles):
        #    wcircle.setAutoDraw(False)
    ImageComponent bet_button
      image = images/green-tick.png
      pos = [-75, -float(win.size[1])/2+100]
      size = [120, 150]
      startVal [time (s)] = 0.5
      units = pix
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    ImageComponent sure_button
      image = images/red-cross.png
      pos = [75,  -float(win.size[1])/2+100]
      size = [120, 150]
      startVal [time (s)] = 0.5
      units = pix
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  Routine Start_2
    ImageComponent Start
      image = images/Start-playing.png
      size = [1024, 768]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      units = pix
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  Routine sliderpres
    RatingScaleComponent rating_2
      customize_everything = labels=('nada seguro', 'muy seguro'), markerColor='White', lineColor=[-1,-1,-1], textColor=[-1,-1,-1], scale=None, singleClick=True, precision=100, showAccept=False, mouseOnly=True
      forceEndRoutine = True
      high = 1
      labels = nada seguro, muy seguro
      low = 0
      marker = circle
      pos = 0, -0.4
      showAccept = False
      size = 1.0
      startVal [time (s)] = 0.5
      storeRating = False
      storeRatingTime = False
      visualAnalogScale = True
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    CodeComponent code_7
      Code Type = Auto->JS
      Each Frame:
        if 'sliderpres' not in trialpresentation_types[intro.thisN]:
            continueRoutine = False
    ImageComponent slider_3
      image = images/slider2.png
      pos = (0, -0.4)
      size = (0.61, 0.1)
      startVal [time (s)] = 0.5
      units = norm
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Flow
  Routine test_trial
  LoopInitiator intro loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 5
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    Routine trialpresentation
    Routine sliderpres
    Routine wagerpres
  LoopTerminator intro
  Routine Start_2
  LoopInitiator trials loopType="StairHandler"
    N down = 3
    N reversals = 0
    N up = 1
    loopType = staircase
    max value = 1
    min value = 0
    nReps = 50
    start value = 0.3
    step sizes = [0.1, 0.05, 0.05, 0.01]
    step type = lin
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    Routine trial
    Routine slider
    Routine wager
    Routine pass_level
  LoopTerminator trials
  Routine End
