PsychoPy2experiment version="2021.1.0"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1366, 768]
  expName = puntos
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Routines
  Routine trial
    PolygonComponent poli1
      fillColor = red
      lineColor = red
      nVertices = 99
      pos [set every repeat] = $punto1
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    PolygonComponent poli2
      fillColor = red
      lineColor = red
      nVertices = 99
      pos [set every repeat] = $punto2
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    PolygonComponent poli3
      fillColor = red
      lineColor = red
      nVertices = 99
      pos [set every repeat] = $punto3
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    PolygonComponent poli4
      fillColor = red
      lineColor = red
      nVertices = 99
      pos [set every repeat] = $punto4
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    PolygonComponent poli5
      fillColor = red
      lineColor = red
      nVertices = 99
      pos [set every repeat] = $punto5
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    PolygonComponent poli6
      fillColor = red
      lineColor = red
      nVertices = 99
      pos [set every repeat] = $punto6
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    PolygonComponent poli7
      fillColor = red
      lineColor = red
      nVertices = 99
      pos [set every repeat] = $punto7
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    PolygonComponent poli8
      fillColor = red
      lineColor = red
      nVertices = 99
      pos [set every repeat] = $punto8
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    PolygonComponent poli9
      fillColor = red
      lineColor = red
      nVertices = 99
      pos [set every repeat] = $punto9
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditions = [{'punto1': [0, 0], 'punto2': [-0.7, 0.1], 'punto3': [0.1, 0.3], 'punto4': [0, -0.4], 'punto5': [0.5, 0.5], 'punto6': [-0.3, -0.4], 'punto7': [0.15, -0.4], 'punto8': [0.7, 0.4], 'punto9': [0.5, 0]}]
    conditionsFile = parametrospuntos.xlsx
    isTrials = False
    loopType = random
    nReps = 1
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    Routine trial
  LoopTerminator trials
