PsychoPy2experiment version="2022.1.3"
Settings
  Data file delimiter = comma
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Units = deg
  Window size (pixels) = [1680, 1050]
  expName = PruebaGabor2
  keyboardBackend = ioHub
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Routines
  Routine Intrucciones
    TextComponent Instrucciones1
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 1
      stopVal [condition] = key_resp_3.getKeys(keyList=['space'], waitRelease=False)
      units = height
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      text:
        Bienvenidos/as
        Presiona la barra espaciadora para continuar
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 1
      stopVal [condition] = key_resp_3.getKeys(keyList=['space'], waitRelease=False)
      store = nothing
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    TextComponent Instrucciones2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [condition] = Instrucciones1.status==FINISHED
      stopVal [condition] = key_resp_4.getKeys(keyList=['space'], waitRelease=False)
      units = height
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      text:
        A continuación
        veras un circulo en pantalla, por dentro tiene líneas oscuras y claras.
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [condition] = Instrucciones2.status==STARTED
      stopVal [condition] = key_resp_4.getKeys(keyList=['space'], waitRelease=False)
      store = nothing
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    TextComponent Instrucciones3
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [condition] = Instrucciones2.status==FINISHED
      stopVal [condition] = key_resp_5.getKeys(keyList=['space'], waitRelease=False)
      units = height
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      text:
        Observa la cantidad de líneas claras y oscuras que hay y la orientación de las mismas.

        Existen dos grupos de círculos, A y B.
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [condition] = Instrucciones3.status==STARTED
      stopVal [condition] = key_resp_5.getKeys(keyList=['space'], waitRelease=False)
      store = nothing
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    TextComponent instrucciones4
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [condition] = Instrucciones3.status==FINISHED
      stopVal [condition] = key_resp_6.getKeys(keyList=['space'], waitRelease=False)
      units = height
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      text:
        Elegi a que grupo pertenece el circulo en pantalla.

        Si es uno u otro depende tanto de la frecuencia de las bandas como de su orientacion.

        Observa estas dos caracteristicas, usa la flecha derecha e izquierda para distinguirlos.

        Una vez presionada la tecla en la pantalla aparecerá "Correcto" o "Incorrecto"
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [condition] = instrucciones4.status==STARTED
      stopVal [condition] = key_resp_6.getKeys(keyList=['space'], waitRelease=False)
      store = nothing
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    TextComponent Instrucciones5
      letterHeight = 0.05
      startVal [condition] = instrucciones4.status==FINISHED
      stopVal [duration (s)] = 4
      text = ¡Vamos a hacer uno de prueba!
      units = height
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  Routine End
    TextComponent Gracias
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 4
      text = ¡Muchas gracias por participar!
      units = height
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    ImageComponent image
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 4
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  Routine Comienzo
    TextComponent ComienzoTexto
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      units = height
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      text:
        Excelente
        Si tenes alguna duda consulta antes de seguir con el/la experimentador/a

        Cuando estes listo/a para continuar presiona la barra espaciadora
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1
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  Routine feedbacka
    CodeComponent message
      Code Type = Py
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      Begin Experiment:
        msg=''
      Begin Routine:
        if keyrespTest.corr:#stored on last run routine
          msg="¡Correcto!"
        else:
          msg="Segui intentando"
    TextComponent feedback_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
      units = height
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  Routine trialb
    KeyboardComponent keyrespTest
      allowedKeys = 'left','right'
      correctAns = $Tecla
      forceEndRoutine = True
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 3
      storeCorrect = True
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    GratingComponent grating2
      mask = gauss
      ori [set every repeat] = $Orientacion
      phase = 0
      sf [set every repeat] = $FrecuenciaEspacial
      size = (500, 500)
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 3.0
      tex = sin
      units = pix
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        # Define your stimuli
        grating_size = 10  # Initial size of the grating stimulus
        grating = visual.GratingStim(win=win, ori=45, tex='sin', sf=0.05, size=grating_size)

        mask_size = 10  # Initial size of the Gaussian mask
        mask_opacity = 1.0  # Opacity of the mask (1.0 is fully opaque)
        mask_grating = visual.GratingStim(win=win, mask="gauss", size=mask_size, opacity=mask_opacity)
  Routine Prueba
    KeyboardComponent KeyRespPrueba
      allowedKeys = 'left','right'
      correctAns = Tecla
      forceEndRoutine = True
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 3
      storeCorrect = True
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    GratingComponent GratingPrueba
      mask = gauss
      ori [set every repeat] = $Orientacion
      phase = 0
      sf [set every repeat] = $FrecuenciaEspacial
      size = (500,500)
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 3.0
      tex = sin
      units = pix
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        # Define your stimuli
        grating_size = 10  # Initial size of the grating stimulus
        grating = visual.GratingStim(win=win, ori=45, tex='sin', sf=0.05, size=grating_size)

        mask_size = 10  # Initial size of the Gaussian mask
        mask_opacity = 1.0  # Opacity of the mask (1.0 is fully opaque)
        mask_grating = visual.GratingStim(win=win, mask="gauss", size=mask_size, opacity=mask_opacity)
  Routine FeedbackPrueba
    CodeComponent MsjePrueba
      Code Type = Py
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      Begin Routine:
        if KeyRespPrueba.corr:#stored on last run routine
          msg="Correcto"
        else:
          msg="Segui intentando"
    TextComponent FeedbackPrueb
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
      units = height
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Flow
  Routine Intrucciones
  LoopInitiator Training loopType="TrialHandler"
    conditionsFile = ParametrosPRUEBAintinfoTraining.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'Frecuencia': 6.12015737910944, 'Orientaciondecimal': 0.960355341119567, 'Categoria': 'A', 'Tecla': 'left', 'FrecuenciaEspacial': 0.030600786895547197, 'Orientacion': 96.0355341119567},
      {'Frecuencia': 5.80474231627537, 'Orientaciondecimal': 0.973560272222272, 'Categoria': 'B', 'Tecla': 'right', 'FrecuenciaEspacial': 0.029023711581376854, 'Orientacion': 97.3560272222272},
      {'Frecuencia': 5.72673654075559, 'Orientaciondecimal': 0.957490584769043, 'Categoria': 'B', 'Tecla': 'right', 'FrecuenciaEspacial': 0.028633682703777953, 'Orientacion': 95.74905847690431},
      {'Frecuencia': 6.08635969142881, 'Orientaciondecimal': 0.950826717019596, 'Categoria': 'A', 'Tecla': 'left', 'FrecuenciaEspacial': 0.03043179845714405, 'Orientacion': 95.0826717019596},
      {'Frecuencia': 6.18055084207957, 'Orientaciondecimal': 0.975046060904673, 'Categoria': 'A', 'Tecla': 'left', 'FrecuenciaEspacial': 0.03090275421039785, 'Orientacion': 97.5046060904673},
      {'Frecuencia': 5.73387135997741, 'Orientaciondecimal': 0.963799584746463, 'Categoria': 'B', 'Tecla': 'right', 'FrecuenciaEspacial': 0.028669356799887052, 'Orientacion': 96.3799584746463},
      {'Frecuencia': 5.71342981255569, 'Orientaciondecimal': 0.951064757265215, 'Categoria': 'B', 'Tecla': 'right', 'FrecuenciaEspacial': 0.02856714906277845, 'Orientacion': 95.1064757265215},
      {'Frecuencia': 6.14443638308499, 'Orientaciondecimal': 0.962063258139216, 'Categoria': 'A', 'Tecla': 'left', 'FrecuenciaEspacial': 0.030722181915424952, 'Orientacion': 96.2063258139216}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
    Routine Prueba
    Routine FeedbackPrueba
  LoopTerminator Training
  Routine Comienzo
  LoopInitiator Test loopType="TrialHandler"
    conditionsFile = ParametrosPruebaintinfo.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'Frecuencia': 6.06857759246386, 'Orientaciondecimal': 0.945170612488669, 'Categoria': 'A', 'Tecla': 'left', 'FrecuenciaEspacial': 0.0303428879623193, 'Orientacion': 94.5170612488669},
      {'Frecuencia': 6.26853264975939, 'Orientaciondecimal': 0.999594929800666, 'Categoria': 'A', 'Tecla': 'left', 'FrecuenciaEspacial': 0.03134266324879695, 'Orientacion': 99.9594929800666},
      {'Frecuencia': 5.68358755276876, 'Orientaciondecimal': 0.947417659413647, 'Categoria': 'B', 'Tecla': 'right', 'FrecuenciaEspacial': 0.028417937763843798, 'Orientacion': 94.74176594136469},
      {'Frecuencia': 5.79393927440919, 'Orientaciondecimal': 0.982277301965931, 'Categoria': 'B', 'Tecla': 'right', 'FrecuenciaEspacial': 0.028969696372045953, 'Orientacion': 98.2277301965931},
      {'Frecuencia': 5.92146189910992, 'Orientaciondecimal': 1.02631741101465, 'Categoria': 'B', 'Tecla': 'right', 'FrecuenciaEspacial': 0.0296073094955496, 'Orientacion': 102.631741101465},
      {'Frecuencia': 6.13568199720158, 'Orientaciondecimal': 0.955533049987392, 'Categoria': 'A', 'Tecla': 'left', 'FrecuenciaEspacial': 0.0306784099860079, 'Orientacion': 95.5533049987392},
      {'Frecuencia': 6.14012598888524, 'Orientaciondecimal': 0.964184109460307, 'Categoria': 'A', 'Tecla': 'left', 'FrecuenciaEspacial': 0.030700629944426197, 'Orientacion': 96.41841094603069},
      {'Frecuencia': 5.76125666784697, 'Orientaciondecimal': 0.96845609797586, 'Categoria': 'B', 'Tecla': 'right', 'FrecuenciaEspacial': 0.02880628333923485, 'Orientacion': 96.845609797586}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
    Routine trialb
    Routine feedbacka
  LoopTerminator Test
  Routine End
