PsychoPy2experiment version="2022.1.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = PruebaBlurryBorders
  keyboardBackend = ioHub
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Routines
  Routine trial
    CodeComponent code
      Code Type = Py
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      End Routine:
        win.close()
    GratingComponent grating
      mask = circle
      opacity = 0.5
      ori = 96
      sf = 0.030600787
      size = (200,200)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 2
      tex = sin
      units = pix
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    GratingComponent mask_grating
      mask = gauss
      opacity = 0
      ori = 96
      sf = 0.030600787
      size = (250,250)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 2
      tex = sin
      units = pix
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Flow
  Routine trial
