PsychoPy2experiment version="2022.1.3"
Settings
  Data file delimiter = comma
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Units = deg
  Window size (pixels) = [1920, 1080]
  expName = PruebaGabor2
  keyboardBackend = ioHub
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Routines
  Routine Intrucciones
    TextComponent Instrucciones2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 5
      stopVal [duration (s)] = 4
      units = height
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      text:
        A continuacion
        veran un circulo en pantalla, por dentro tienen lineas oscuras y claras.
    TextComponent Instrucciones
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 9.5
      stopVal [duration (s)] = 4
      units = height
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      text:
        Observa la orientacion de las lineas y la cantidad que hay.

        Existen dos grupos de circulos, A y B.
    TextComponent instrucciones3
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 14
      stopVal [duration (s)] = 4
      units = height
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      text:
        Elegi a que grupo pertenece el circulo en pantalla.

        Si pertenece a la categoria A presiona la flecha derecha.

        Si pertenece a la categoria B presiona la flecha izquierda.
    TextComponent Intrucciones1
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 1
      stopVal [duration (s)] = 4
      text = Bienvenidos/as
      units = height
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 18.5
      stopVal [duration (s)] = 4
      text = Vamos a hacer uno de prueba!
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  Routine End
    TextComponent Gracias
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 4
      text = ¡Muchas gracias por participar!
      units = height
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    ImageComponent image
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 4
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  Routine Comienzo
    TextComponent ComienzoTexto
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      units = height
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      text:
        Excelente
        Si tenes alguna duda consulta antes de seguir con el/la experimentador/a

        Cuando estes listo/a para continuar presiona la barra espaciadora
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1
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  Routine feedbacka
    CodeComponent message
      Code Type = Py
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      Begin Experiment:
        msg=''
      Begin Routine:
        if key_resp.corr:#stored on last run routine
          msg="Correct!"
        else:
          msg="Oops! That was wrong"
    TextComponent feedback_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
      units = height
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  Routine trialb
    GratingComponent grating2
      mask = circle
      ori [set every repeat] = $Orientacion
      phase = 0
      sf [set every repeat] = $FrecuenciaEspacial
      size = (200, 200)
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 3.0
      tex = sin
      units = pix
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    KeyboardComponent key_resp
      allowedKeys = 'left','right'
      correctAns = $tecla
      forceEndRoutine = True
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 3
      storeCorrect = True
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  Routine Prueba
    KeyboardComponent KeyRespPrueba
      allowedKeys = 'left','right'
      correctAns = tecla
      forceEndRoutine = True
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 3
      storeCorrect = True
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    GratingComponent GratingPrueba
      mask = circle
      ori [set every repeat] = $Orientation
      phase = 0
      sf [set every repeat] = $FrecuenciaEspacial
      size = (200,200)
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 3.0
      tex = sin
      units = pix
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  Routine FeedbackPrueba
    TextComponent FeedbackPrueb
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
      units = height
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    CodeComponent MsjePrueba
      Code Type = Py
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      Begin Experiment:
        msg=''
      Begin Routine:
        if KeyRespPrueba.corr:#stored on last run routine
          msg="Correct!"
        else:
          msg="Oops! That was wrong"
Flow
  Routine Intrucciones
  LoopInitiator Training loopType="TrialHandler"
    conditionsFile = ParametrosAyBTest1.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'FrecEspacial': 5.67570285788662, 'Orientation': 150, 'Categoria': 'A', 'CorrectAns': 'left', 'FrecuenciaEspacial': 0.0283785142894331},
      {'FrecEspacial': 5.97436997443584, 'Orientation': 114, 'Categoria': 'A', 'CorrectAns': 'left', 'FrecuenciaEspacial': 0.0298718498721792},
      {'FrecEspacial': 5.68239108616436, 'Orientation': 269, 'Categoria': 'A', 'CorrectAns': 'left', 'FrecuenciaEspacial': 0.0284119554308218},
      {'FrecEspacial': 5.87740232142946, 'Orientation': 313, 'Categoria': 'A', 'CorrectAns': 'left', 'FrecuenciaEspacial': 0.0293870116071473},
      {'FrecEspacial': 6.21497055868499, 'Orientation': 182, 'Categoria': 'A', 'CorrectAns': 'left', 'FrecuenciaEspacial': 0.03107485279342495},
      {'FrecEspacial': 5.9777226950445, 'Orientation': 215, 'Categoria': 'A', 'CorrectAns': 'left', 'FrecuenciaEspacial': 0.0298886134752225},
      {'FrecEspacial': 6.16942304684475, 'Orientation': 156, 'Categoria': 'A', 'CorrectAns': 'left', 'FrecuenciaEspacial': 0.030847115234223753},
      {'FrecEspacial': 5.83113663926556, 'Orientation': 47, 'Categoria': 'A', 'CorrectAns': 'left', 'FrecuenciaEspacial': 0.029155683196327803},
      {'FrecEspacial': 6.06838533782589, 'Orientation': 13, 'Categoria': 'A', 'CorrectAns': 'left', 'FrecuenciaEspacial': 0.03034192668912945},
      {'FrecEspacial': 5.88404357011018, 'Orientation': 172, 'Categoria': 'A', 'CorrectAns': 'left', 'FrecuenciaEspacial': 0.0294202178505509}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
    Routine Prueba
    Routine FeedbackPrueba
  LoopTerminator Training
  Routine Comienzo
  LoopInitiator Test loopType="TrialHandler"
    conditionsFile = ParametrosAyB.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'Frecuencia': 5.93196959075185, 'Orientacion': 127.47737405748, 'Categoria': 'A', 'tecla': 'left', 'FrecuenciaEspacial': 0.029659847953759248},
      {'Frecuencia': 5.85443077619495, 'Orientacion': 117.430662194758, 'Categoria': 'A', 'tecla': 'left', 'FrecuenciaEspacial': 0.02927215388097475},
      {'Frecuencia': 5.96571590425178, 'Orientacion': 125.787974095969, 'Categoria': 'A', 'tecla': 'left', 'FrecuenciaEspacial': 0.0298285795212589},
      {'Frecuencia': 6.21127711385968, 'Orientacion': 125.836139031753, 'Categoria': 'A', 'tecla': 'left', 'FrecuenciaEspacial': 0.0310563855692984},
      {'Frecuencia': 6.18434955715339, 'Orientacion': 122.646180665539, 'Categoria': 'A', 'tecla': 'left', 'FrecuenciaEspacial': 0.03092174778576695},
      {'Frecuencia': 6.34357164497819, 'Orientacion': 122.274418501258, 'Categoria': 'A', 'tecla': 'left', 'FrecuenciaEspacial': 0.03171785822489095},
      {'Frecuencia': 6.1723048065297, 'Orientacion': 127.917841087616, 'Categoria': 'A', 'tecla': 'left', 'FrecuenciaEspacial': 0.030861524032648503},
      {'Frecuencia': 5.93448769355556, 'Orientacion': 126.850124022672, 'Categoria': 'A', 'tecla': 'left', 'FrecuenciaEspacial': 0.0296724384677778},
      {'Frecuencia': 5.95607941801887, 'Orientacion': 127.507099846778, 'Categoria': 'A', 'tecla': 'left', 'FrecuenciaEspacial': 0.02978039709009435},
      {'Frecuencia': 6.14299647049478, 'Orientacion': 126.657906753107, 'Categoria': 'A', 'tecla': 'left', 'FrecuenciaEspacial': 0.0307149823524739}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
    Routine trialb
    Routine feedbacka
  LoopTerminator Test
  Routine End
