PsychoPy2experiment version="2022.1.3"
Settings
  Data file delimiter = comma
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Units = deg
  Window size (pixels) = [1680, 1050]
  expName = PruebaGabor2
  keyboardBackend = ioHub
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Routines
  Routine Intrucciones
    TextComponent Instrucciones2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 5
      stopVal [duration (s)] = 4
      units = height
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      text:
        A continuacion
        veran un circulo en pantalla, por dentro tienen lineas oscuras y claras.
    TextComponent Instrucciones
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 9.5
      stopVal [duration (s)] = 4
      units = height
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      text:
        Observa la orientacion de las lineas y la cantidad que hay.

        Existen dos grupos de circulos, A y B.
    TextComponent instrucciones3
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 14
      stopVal [duration (s)] = 4
      units = height
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      text:
        Elegi a que grupo pertenece el circulo en pantalla.

        Si pertenece a la categoria A presiona la flecha derecha.

        Si pertenece a la categoria B presiona la flecha izquierda.
    TextComponent Intrucciones1
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 1
      stopVal [duration (s)] = 4
      text = Bienvenidos/as
      units = height
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 18.5
      stopVal [duration (s)] = 4
      text = Vamos a hacer uno de prueba!
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  Routine End
    TextComponent Gracias
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 4
      text = ¡Muchas gracias por participar!
      units = height
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    ImageComponent image
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 4
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  Routine Comienzo
    TextComponent ComienzoTexto
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      units = height
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      text:
        Excelente
        Si tenes alguna duda consulta antes de seguir con el/la experimentador/a

        Cuando estes listo/a para continuar presiona la barra espaciadora
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1
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  Routine feedbacka
    CodeComponent message
      Code Type = Py
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      Begin Experiment:
        msg=''
      Begin Routine:
        if key_resp.corr:#stored on last run routine
          msg="Correct!"
        else:
          msg="Oops! That was wrong"
    TextComponent feedback_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
      units = height
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  Routine trialb
    GratingComponent grating2
      mask = circle
      ori [set every repeat] = $Orientation
      phase = 0
      sf [set every repeat] = $FrecuenciaEspacial
      size = (200, 200)
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 3.0
      tex = sin
      units = pix
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    KeyboardComponent key_resp
      allowedKeys = 'left','right'
      correctAns = $tecla
      forceEndRoutine = True
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 3
      storeCorrect = True
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  Routine Prueba
    KeyboardComponent KeyRespPrueba
      allowedKeys = 'left','right'
      correctAns = tecla
      forceEndRoutine = True
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 3
      storeCorrect = True
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    GratingComponent GratingPrueba
      mask = circle
      ori [set every repeat] = $Orientation
      phase = 0
      sf [set every repeat] = $FrecuenciaEspacial
      size = (200,200)
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 3.0
      tex = sin
      units = pix
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  Routine FeedbackPrueba
    TextComponent FeedbackPrueb
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
      units = height
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    CodeComponent MsjePrueba
      Code Type = Py
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      Begin Experiment:
        msg=''
      Begin Routine:
        if KeyRespPrueba.corr:#stored on last run routine
          msg="Correct!"
        else:
          msg="Oops! That was wrong"
Flow
  Routine Intrucciones
  LoopInitiator Training loopType="TrialHandler"
    conditionsFile = Categorias mas separadas/ParametrosAyBtraining.xlsx
    loopType = fullRandom
    nReps = 1
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    conditions:
      [{'Frecuencia': 4.27238428520602, 'Orientacion': 123.888873544604, 'Categoria': 'A', 'tecla': 'left', 'FrecuenciaEspacial': 0.021361921426030103},
      {'Frecuencia': 4.36345945902825, 'Orientacion': 125.703964385564, 'Categoria': 'A', 'tecla': 'left', 'FrecuenciaEspacial': 0.021817297295141248},
      {'Frecuencia': 4.21034628701276, 'Orientacion': 126.69960386714, 'Categoria': 'A', 'tecla': 'left', 'FrecuenciaEspacial': 0.021051731435063798},
      {'Frecuencia': 4.28989131572139, 'Orientacion': 124.021447014589, 'Categoria': 'A', 'tecla': 'left', 'FrecuenciaEspacial': 0.021449456578606953},
      {'Frecuencia': 4.17504873370622, 'Orientacion': 125.371443259583, 'Categoria': 'A', 'tecla': 'left', 'FrecuenciaEspacial': 0.020875243668531097},
      {'Frecuencia': 4.17843512507528, 'Orientacion': 128.27949758732, 'Categoria': 'A', 'tecla': 'left', 'FrecuenciaEspacial': 0.020892175625376402},
      {'Frecuencia': 4.07997828140618, 'Orientacion': 127.622075895731, 'Categoria': 'A', 'tecla': 'left', 'FrecuenciaEspacial': 0.0203998914070309},
      {'Frecuencia': 4.3885152373554, 'Orientacion': 126.125500489509, 'Categoria': 'A', 'tecla': 'left', 'FrecuenciaEspacial': 0.021942576186777002},
      {'Frecuencia': 4.20073613419003, 'Orientacion': 125.509129014862, 'Categoria': 'A', 'tecla': 'left', 'FrecuenciaEspacial': 0.02100368067095015},
      {'Frecuencia': 4.2515157424853, 'Orientacion': 127.771435310644, 'Categoria': 'A', 'tecla': 'left', 'FrecuenciaEspacial': 0.021257578712426502}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
    Routine Prueba
    Routine FeedbackPrueba
  LoopTerminator Training
  Routine Comienzo
  LoopInitiator Test loopType="TrialHandler"
    conditionsFile = Categorias mas separadas/ParametrosAyB.xlsx
    loopType = fullRandom
    nReps = 1
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    conditions:
      [{'Frecuencia': 4.05100711134529, 'Orientacion': 126.942836493549, 'Categoria': 'A', 'tecla': 'left', 'FrecuenciaEspacial': 0.020255035556726447},
      {'Frecuencia': 4.23099506672041, 'Orientacion': 123.401469205642, 'Categoria': 'A', 'tecla': 'left', 'FrecuenciaEspacial': 0.021154975333602048},
      {'Frecuencia': 4.24789942373688, 'Orientacion': 126.07154169596, 'Categoria': 'A', 'tecla': 'left', 'FrecuenciaEspacial': 0.0212394971186844},
      {'Frecuencia': 4.50662662795716, 'Orientacion': 126.107776343216, 'Categoria': 'A', 'tecla': 'left', 'FrecuenciaEspacial': 0.022533133139785798},
      {'Frecuencia': 4.26119544339254, 'Orientacion': 129.060886148814, 'Categoria': 'A', 'tecla': 'left', 'FrecuenciaEspacial': 0.0213059772169627},
      {'Frecuencia': 4.12897011869915, 'Orientacion': 123.931209077652, 'Categoria': 'A', 'tecla': 'left', 'FrecuenciaEspacial': 0.02064485059349575},
      {'Frecuencia': 4.17914595645161, 'Orientacion': 123.775418390505, 'Categoria': 'A', 'tecla': 'left', 'FrecuenciaEspacial': 0.02089572978225805},
      {'Frecuencia': 4.50835693086305, 'Orientacion': 125.145778897156, 'Categoria': 'A', 'tecla': 'left', 'FrecuenciaEspacial': 0.02254178465431525},
      {'Frecuencia': 4.40987419607911, 'Orientacion': 122.854388911422, 'Categoria': 'A', 'tecla': 'left', 'FrecuenciaEspacial': 0.022049370980395548},
      {'Frecuencia': 4.18629982963397, 'Orientacion': 124.845358525135, 'Categoria': 'A', 'tecla': 'left', 'FrecuenciaEspacial': 0.02093149914816985}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
    Routine trialb
    Routine feedbacka
  LoopTerminator Test
  Routine End
