PsychoPy2experiment version="3.2.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = corrAns
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Routines
  Routine trial
    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $"The correct answer is " + str(corrAns) + "\nPress SPACE for incorrect response"
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    CodeComponent code
      Code Type = Py
      End Routine:
        if key_resp.keys in corrAns:
            correct = 1
        else:
            correct = 0

        thisExp.addData("correct", correct)
  Routine blank
    StaticComponent ISI
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = cond.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [OrderedDict([('corrAns', 'left, right')]),
      OrderedDict([('corrAns', 'left, right')]),
      OrderedDict([('corrAns', 'left, right')]),
      OrderedDict([('corrAns', 'left, right')])]
    Routine trial
    Routine blank
  LoopTerminator trials
