PsychoPy2experiment version="2022.1.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = gausiianmakstrial
  keyboardBackend = ioHub
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Routines
  Routine trial
    CodeComponent code
      Code Type = Py
      Each Frame:
        mask_size=(250,250)
        mask_grating.size = mask_size  # Update the Gaussian mask size based on the "mask_size" variable
          # Update the main grating texture with the mask texture
        grating.draw()  # Draw the circular grating stimulus
        win.flip()  # Up
    GratingComponent grating
      contrast = 0.9
      mask = gauss
      ori = 96
      sf = 0.030600787
      size = (200,200)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      tex = sin
      units = pix
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Flow
  Routine trial
