PsychoPy2experiment version="2022.1.3"
Settings
  Data file delimiter = comma
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Units = deg
  Window size (pixels) = [1680, 1050]
  expName = PruebaGabor2
  keyboardBackend = ioHub
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Routines
  Routine Intrucciones
    TextComponent Instrucciones1
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 1
      stopVal [condition] = key_resp_3.getKeys(keyList=['space'], waitRelease=False)
      units = height
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      text:
        Bienvenidos/as
        Presiona la barra espaciadora para continuar
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 1
      stopVal [condition] = key_resp_3.getKeys(keyList=['space'], waitRelease=False)
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    TextComponent Instrucciones2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [condition] = Instrucciones1.status==FINISHED
      stopVal [condition] = key_resp_4.getKeys(keyList=['space'], waitRelease=False)
      units = height
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      text:
        A continuacion
        veran un circulo en pantalla, por dentro tienen lineas oscuras y claras.
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [condition] = Instrucciones2.status==STARTED
      stopVal [condition] = key_resp_4.getKeys(keyList=['space'], waitRelease=False)
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    TextComponent Instrucciones3
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [condition] = Instrucciones2.status==FINISHED
      stopVal [condition] = key_resp_5.getKeys(keyList=['space'], waitRelease=False)
      units = height
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      text:
        Observa la cantidad de lineas claras y oscuras que hay.

        Hay dos tipos de circulos, se diferencian en la frecuencia de las lineas claras y oscuras.
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [condition] = Instrucciones3.status==STARTED
      stopVal [condition] = key_resp_5.getKeys(keyList=['space'], waitRelease=False)
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    TextComponent instrucciones4
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [condition] = Instrucciones3.status==FINISHED
      stopVal [condition] = key_resp_6.getKeys(keyList=['space'], waitRelease=False)
      units = height
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      text:
        Se te va a mostrar un circulo en la pantalla y debes agruparlo segun la frecuencia de sus lineas.

        Un grupo se corresponde con la flecha derecha. Cuando lo veas presiona la tecla derecha.

        El otro grupo se corresponde con la flecha izquierda. Cuando lo veas presiona la flecha izquierda.
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [condition] = instrucciones4.status==STARTED
      stopVal [condition] = key_resp_6.getKeys(keyList=['space'], waitRelease=False)
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    TextComponent Instrucciones5
      letterHeight = 0.05
      startVal [condition] = instrucciones4.status==FINISHED
      stopVal [condition] = key_resp_6.getKeys(keyList=['space'], waitRelease=False)
      units = height
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      text:
        Cuando veas el primer circulo tenes que adivinar si se corresponde con la flecha derecha o izquierda.

        Vamos a hacer uno de prueba!
    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [condition] = Instrucciones5.status==STARTED
      stopVal [condition] = key_resp_6.getKeys(keyList=['space'], waitRelease=False)
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  Routine End
    TextComponent Gracias
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 4
      text = ¡Muchas gracias por participar!
      units = height
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    ImageComponent image
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 4
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  Routine Comienzo
    TextComponent ComienzoTexto
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      units = height
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      text:
        Excelente
        Si tenes alguna duda consulta antes de seguir con el/la experimentador/a

        Cuando estes listo/a para continuar presiona la barra espaciadora
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1
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  Routine feedbacka
    CodeComponent message
      Code Type = Py
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      Begin Experiment:
        msg=''
      Begin Routine:
        if key_resp.corr:#stored on last run routine
          msg="¡Correcto!"
        else:
          msg="Segui intentando"
    TextComponent feedback_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
      units = height
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  Routine trialb
    GratingComponent grating2
      mask = circle
      ori [set every repeat] = $Orientation
      phase = 0
      sf [set every repeat] = $FrecuenciaEspacial
      size = (200, 200)
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 3.0
      tex = sin
      units = pix
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    KeyboardComponent key_resp
      allowedKeys = 'left','right'
      correctAns = $tecla
      forceEndRoutine = True
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 3
      storeCorrect = True
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  Routine Prueba
    KeyboardComponent KeyRespPrueba
      allowedKeys = 'left','right'
      correctAns = tecla
      forceEndRoutine = True
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 3
      storeCorrect = True
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    GratingComponent GratingPrueba
      mask = circle
      ori [set every repeat] = $Orientation
      phase = 0
      sf [set every repeat] = $FrecuenciaEspacial
      size = (200,200)
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 3.0
      tex = sin
      units = pix
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  Routine FeedbackPrueba
    CodeComponent MsjePrueba
      Code Type = Py
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      Begin Experiment:
        msg=''
      Begin Routine:
        if KeyRespPrueba.corr:#stored on last run routine
          msg="¡Correcto!"
        else:
          msg="Segui intentando"
    TextComponent FeedbackPrueb
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
      units = height
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Flow
  Routine Intrucciones
  LoopInitiator Training loopType="TrialHandler"
    conditionsFile = Parametros/Parametros E y F(superpuestos)/ParametrosEyFPractice.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'Frecuencia': 5.8071055031334, 'Orientacion': 126.095527609804, 'Categoria': 'A', 'tecla': 'left', 'FrecuenciaEspacial': 0.029035527515667, 'Orden': 1},
      {'Frecuencia': 5.64436961501561, 'Orientacion': 120.102947993844, 'Categoria': 'A', 'tecla': 'left', 'FrecuenciaEspacial': 0.028221848075078052, 'Orden': 4},
      {'Frecuencia': 6.01842108155121, 'Orientacion': 124.970499761804, 'Categoria': 'A', 'tecla': 'left', 'FrecuenciaEspacial': 0.030092105407756052, 'Orden': 6},
      {'Frecuencia': 5.59991295731731, 'Orientacion': 123.659377025703, 'Categoria': 'A', 'tecla': 'left', 'FrecuenciaEspacial': 0.027999564786586547, 'Orden': 3},
      {'Frecuencia': 5.86000675504161, 'Orientacion': 125.097810493697, 'Categoria': 'A', 'tecla': 'left', 'FrecuenciaEspacial': 0.02930003377520805, 'Orden': 10},
      {'Frecuencia': 6.97351028243891, 'Orientacion': 124.811887846181, 'Categoria': 'B', 'tecla': 'right', 'FrecuenciaEspacial': 0.034867551412194546, 'Orden': 2},
      {'Frecuencia': 6.70154405694418, 'Orientacion': 124.752281469682, 'Categoria': 'B', 'tecla': 'right', 'FrecuenciaEspacial': 0.033507720284720904, 'Orden': 9},
      {'Frecuencia': 6.70252114110423, 'Orientacion': 125.631939944495, 'Categoria': 'B', 'tecla': 'right', 'FrecuenciaEspacial': 0.03351260570552115, 'Orden': 7},
      {'Frecuencia': 7.04733241547937, 'Orientacion': 123.230512019733, 'Categoria': 'B', 'tecla': 'right', 'FrecuenciaEspacial': 0.03523666207739685, 'Orden': 5}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
    Routine Prueba
    Routine FeedbackPrueba
  LoopTerminator Training
  Routine Comienzo
  LoopInitiator Test loopType="TrialHandler"
    conditionsFile = Parametros/Parametros E y F(superpuestos)/ParametrosEyF.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'Frecuencia': 6.93234125901961, 'Orientacion': 125.924868165109, 'Categoria': 'F', 'tecla': 'right', 'FrecuenciaEspacial': 0.03466170629509805, 'Orden': 1},
      {'Frecuencia': 7.02497359482055, 'Orientacion': 122.628624380508, 'Categoria': 'F', 'tecla': 'right', 'FrecuenciaEspacial': 0.035124867974102754, 'Orden': 2},
      {'Frecuencia': 6.60367058960161, 'Orientacion': 122.972561364095, 'Categoria': 'F', 'tecla': 'right', 'FrecuenciaEspacial': 0.033018352948008055, 'Orden': 3},
      {'Frecuencia': 6.09987877706183, 'Orientacion': 125.373371597183, 'Categoria': 'E', 'tecla': 'left', 'FrecuenciaEspacial': 0.030499393885309152, 'Orden': 4},
      {'Frecuencia': 5.99246984832617, 'Orientacion': 128.207849823814, 'Categoria': 'E', 'tecla': 'left', 'FrecuenciaEspacial': 0.02996234924163085, 'Orden': 5},
      {'Frecuencia': 5.97116825735348, 'Orientacion': 117.721009455833, 'Categoria': 'E', 'tecla': 'left', 'FrecuenciaEspacial': 0.029855841286767403, 'Orden': 6},
      {'Frecuencia': 6.73943488968302, 'Orientacion': 125.807525046009, 'Categoria': 'F', 'tecla': 'right', 'FrecuenciaEspacial': 0.0336971744484151, 'Orden': 7},
      {'Frecuencia': 7.10539554110955, 'Orientacion': 131.136658346503, 'Categoria': 'F', 'tecla': 'right', 'FrecuenciaEspacial': 0.035526977705547746, 'Orden': 8},
      {'Frecuencia': 6.12217460351626, 'Orientacion': 126.097885466808, 'Categoria': 'E', 'tecla': 'left', 'FrecuenciaEspacial': 0.0306108730175813, 'Orden': 9}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
    Routine trialb
    Routine feedbacka
  LoopTerminator Test
  Routine End
